PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'ID ': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = SoloProject
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine phase_1
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image
      image [set every repeat] = $Imagefile
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
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    KeyboardComponent key_resp
      allowedKeys = 'a','b','c'
      correctAns = $Corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 1
      storeCorrect = True
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  Routine phase_2
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    PolygonComponent fixation_2
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image_2
      image [set every repeat] = $Imagefile
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'a','b','c'
      correctAns = $Corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 1
      storeCorrect = True
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  Routine introduction
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        In this experiment you will be shown a maze with three endpoints marked as 'A', 'B', 'C'.
        There are two levels -
        Level 1 consists of square - shaped mazes.
        Level 2 consists of Triangle - shaped mazes.
        To answer press the letter key of the answer you choose.
        If you wish to continue with this experiment press 'spacebar', if not press 'esc'.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine break_3
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Take a break!
        To resume press space bar.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Thank you for your participation!
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Flow
  Routine introduction
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 0:10
    conditionsFile = Image sheet.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Imagefile': 'images/1.png', 'Corr_resp': 'a'},
      {'Imagefile': 'images/2.png', 'Corr_resp': 'a'},
      {'Imagefile': 'images/3.png', 'Corr_resp': 'a'},
      {'Imagefile': 'images/4.png', 'Corr_resp': 'c'},
      {'Imagefile': 'images/5.png', 'Corr_resp': 'c'},
      {'Imagefile': 'images/6.png', 'Corr_resp': 'a'},
      {'Imagefile': 'images/7.png', 'Corr_resp': 'c'},
      {'Imagefile': 'images/8.png', 'Corr_resp': 'c'},
      {'Imagefile': 'images/9.png', 'Corr_resp': 'b'},
      {'Imagefile': 'images/10.png', 'Corr_resp': 'c'},
      {'Imagefile': 'images/11.png', 'Corr_resp': 'c'},
      {'Imagefile': 'images/12.png', 'Corr_resp': 'a'},
      {'Imagefile': 'images/13.png', 'Corr_resp': 'b'},
      {'Imagefile': 'images/14.png', 'Corr_resp': 'a'},
      {'Imagefile': 'images/15.png', 'Corr_resp': 'b'},
      {'Imagefile': 'images/16.png', 'Corr_resp': 'b'},
      {'Imagefile': 'images/17.png', 'Corr_resp': 'a'},
      {'Imagefile': 'images/18.png', 'Corr_resp': 'a'},
      {'Imagefile': 'images/19.png', 'Corr_resp': 'c'},
      {'Imagefile': 'images/20.png', 'Corr_resp': 'a'}]
    Routine phase_1
  LoopTerminator trials
  Routine break_3
  LoopInitiator trials_2 loopType="TrialHandler"
    Selected rows = 10:20
    conditionsFile = Image sheet.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Imagefile': 'images/1.png', 'Corr_resp': 'a'},
      {'Imagefile': 'images/2.png', 'Corr_resp': 'a'},
      {'Imagefile': 'images/3.png', 'Corr_resp': 'a'},
      {'Imagefile': 'images/4.png', 'Corr_resp': 'c'},
      {'Imagefile': 'images/5.png', 'Corr_resp': 'c'},
      {'Imagefile': 'images/6.png', 'Corr_resp': 'a'},
      {'Imagefile': 'images/7.png', 'Corr_resp': 'c'},
      {'Imagefile': 'images/8.png', 'Corr_resp': 'c'},
      {'Imagefile': 'images/9.png', 'Corr_resp': 'b'},
      {'Imagefile': 'images/10.png', 'Corr_resp': 'c'},
      {'Imagefile': 'images/11.png', 'Corr_resp': 'c'},
      {'Imagefile': 'images/12.png', 'Corr_resp': 'a'},
      {'Imagefile': 'images/13.png', 'Corr_resp': 'b'},
      {'Imagefile': 'images/14.png', 'Corr_resp': 'a'},
      {'Imagefile': 'images/15.png', 'Corr_resp': 'b'},
      {'Imagefile': 'images/16.png', 'Corr_resp': 'b'},
      {'Imagefile': 'images/17.png', 'Corr_resp': 'a'},
      {'Imagefile': 'images/18.png', 'Corr_resp': 'a'},
      {'Imagefile': 'images/19.png', 'Corr_resp': 'c'},
      {'Imagefile': 'images/20.png', 'Corr_resp': 'a'}]
    Routine phase_2
  LoopTerminator trials_2
  Routine end
